PsychoPy2experiment version="1.82.00"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [800,600]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u'test', u'intermittent:1 or realtime:2': u'1'}
  Save wide csv file = False
  expName = murfi_example
  Units = use prefs
  Screen = 1
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Routines
  Routine baseline
    TextComponent baseline_text
      text = +
      stopVal [duration (s)] = 30
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine fixation
    TextComponent text_3
      text = +
      stopVal [duration (s)] = 18
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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    TextComponent ifeedback_1
      text [set every frame] = $roi1_average
      stopVal [duration (s)] = 4.0
      pos = [-.75, -.7]
      startVal [time (s)] = 4.0
      letterHeight = 0.1
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    TextComponent ifeedback_2
      text [set every frame] = $roi2_average
      stopVal [duration (s)] = 4.0
      pos = [-.25, -.7]
      startVal [time (s)] = 4.0
      letterHeight = 0.1
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    TextComponent ifeedback_3
      text [set every frame] = $roi3_average
      stopVal [duration (s)] = 4.0
      pos = [.25, -.7]
      startVal [time (s)] = 4.0
      letterHeight = 0.1
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    TextComponent ifeedback_4
      text [set every frame] = $roi4_average
      stopVal [duration (s)] = 4.0
      pos = [.75, -.7]
      startVal [time (s)] = 4.0
      letterHeight = 0.1
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    TextComponent rfeedback_1
      stopVal [duration (s)] = 18.0
      pos = [-.75, -.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every frame]:
        $roi1_score
    TextComponent rfeedback_2
      stopVal [duration (s)] = 18.0
      pos = [-.25, -.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every frame]:
        $roi2_score
    TextComponent rfeedback_3
      text [set every frame] = $roi3_score
      stopVal [duration (s)] = 18.0
      pos = [.25, -.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent rfeedback_4
      text [set every frame] = $roi4_score
      stopVal [duration (s)] = 18.0
      pos = [.75,-.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent fixation_feedback
      Begin Experiment:
        from numpy import mean
      Begin Routine:
        communicator.update()
        audio_roi,fingertap_roi,mental_math_roi,visual_roi = rt_update()

        if expInfo['intermittent:1 or realtime:2']=='1':
            roi1_average='audio: \n%.03f'%(mean([float(x) for x in audio_roi[-18:]]))
            roi2_average='fingertap: \n%.03f'%(mean([float(x) for x in fingertap_roi[-18:]]))
            roi3_average='mental math: \n%.03f'%(mean([float(x) for x in mental_math_roi[-18:]]))
            roi4_average='visual: \n%.03f'%(mean([float(x) for x in visual_roi[-18:]]))
      Each Frame:
        communicator.update()
        audio_roi,fingertap_roi,mental_math_roi,visual_roi = rt_update()

        if expInfo['intermittent:1 or realtime:2']=='2':
            roi1_score='audio: \n%.03f'%(float(audio_roi[-1]))
            roi2_score='fingertap: \n%.03f'%(float(fingertap_roi[-1]))
            roi3_score='mental math: \n%.03f'%(float(mental_math_roi[-1]))
            roi4_score='visual: \n%.03f'%(float(visual_roi[-1]))
  Routine trial
    TextComponent condition
      text [set every repeat] = $cond
      stopVal [duration (s)] = 1
      pos = [0, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent cue_image_var
      opacity [set every repeat] = $cue_opacity
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image [set every repeat] = $cue_image
      size = [1, 1]
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    SoundComponent cue_sound_var
      sound [set every repeat] = $cue_sound
      volume [set every repeat] = $cue_volume
      stopVal [duration (s)] = 1.0
      durationEstim = 1.0
      startVal [time (s)] = 0.0
    TextComponent cue_text_var
      text [set every repeat] = $cue_text
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.25
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    TextComponent feedback_1
      text [set every frame] = $roi1_score
      stopVal [duration (s)] = 1.0
      pos = [-.75, -.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent feedback_2
      text [set every frame] = $roi2_score
      stopVal [duration (s)] = 1.0
      pos = [-.25, -.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent feedback_3
      stopVal [duration (s)] = 1.0
      pos = [.25, -.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every frame]:
        $roi3_score
    TextComponent feedback_4
      text [set every frame] = $roi4_score
      stopVal [duration (s)] = 1.0
      pos = [.75, -.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent update_murfi
      Begin Experiment:
        import math
        roi1_average=' '
        roi2_average=' '
        roi3_average=' '
        roi4_average=' '
        roi1_score=' '
        roi2_score=' '
        roi3_score=' '
        roi4_score=' '
      Each Frame:
        communicator.update()
        audio_roi,fingertap_roi,mental_math_roi,visual_roi = rt_update()
        if expInfo['intermittent:1 or realtime:2']=='1':
            roi1_score=' '
            roi2_score=' '
            roi3_score=' '
            roi4_score=' '
        elif expInfo['intermittent:1 or realtime:2']=='2':
            roi1_score='audio: \n%.03f'%(float(audio_roi[-1]))
            roi2_score='fingertap: \n%.03f'%(float(fingertap_roi[-1]))
            roi3_score='mental math: \n%.03f'%(float(mental_math_roi[-1]))
            roi4_score='visual: \n%.03f'%(float(visual_roi[-1]))
  Routine trigger
    KeyboardComponent trigger_button
      forceEndRoutine = True
      allowedKeys = '+','num_add','r','5', 'space'
      startVal [time (s)] = 0.0
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    TextComponent text_4
      text = Waiting for Trigger
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine pre_scan_instructions
    CodeComponent murfi_communicator
      Begin Experiment:
        from murfi_activation_communicator import MurfiActivationCommunicator

        roi_names = ['mental_math_roi', 'fingertap_roi','audio_roi','visual_roi']

        #communicator = MurfiActivationCommunicator('localhost',
        communicator = MurfiActivationCommunicator("192.168.25.5",
                                                    15001, 100,
                                                    roi_names)
        communicator.update()

        def rt_update():
            audio_roi= communicator._rois['audio_roi']['activation']
            fingertap_roi= communicator._rois['fingertap_roi']['activation']
            mental_math_roi= communicator._rois['mental_math_roi']['activation']
            visual_roi= communicator._rois['visual_roi']['activation']
            audio_roi = [value for value in audio_roi if not math.isnan(value)]
            fingertap_roi = [value for value in fingertap_roi if not math.isnan(value)]
            mental_math_roi = [value for value in mental_math_roi if not math.isnan(value)]
            visual_roi = [value for value in visual_roi if not math.isnan(value)]
            return audio_roi, fingertap_roi, mental_math_roi, visual_roi
    TextComponent text
      durationEstim = 30
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Please do the following tasks when indicated:

        Fingertap - tap your fingers while keeping your head still
        Mental Math - solve the math problems
        Audio - listen for the audio cue
        Visual - fixate at the center of the checkerboard



        Experimenter press spacebar to continue
    KeyboardComponent key_resp_2
      durationEstim = 30
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine pre_scan_instructions
  Routine trigger
  Routine baseline
  LoopInitiator condition_loop loopType="TrialHandler"
    conditionsFile = utils/conditions.csv
    isTrials = False
    loopType = sequential
    nReps = 8
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    conditions:
      [{'cond_file': 'utils/conditions/audio_cond1.csv', 'cond': 'audio'},
      {'cond_file': 'utils/conditions/mental_math_cond1.csv', 'cond': 'mental math'},
      {'cond_file': 'utils/conditions/fingertap_cond1.csv', 'cond': 'fingertap '},
      {'cond_file': 'utils/conditions/visual_cond1.csv', 'cond': 'visual'},
      {'cond_file': 'utils/conditions/audio_cond2.csv', 'cond': 'audio'},
      {'cond_file': 'utils/conditions/mental_math_cond2.csv', 'cond': 'mental math'},
      {'cond_file': 'utils/conditions/fingertap_cond2.csv', 'cond': 'fingertap'},
      {'cond_file': 'utils/conditions/visual_cond2.csv', 'cond': 'visual'}]
    LoopInitiator repetitions loopType="TrialHandler"
      conditionsFile = $cond_file
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator repetitions
    Routine fixation
  LoopTerminator condition_loop
